<?xml version='1.0' encoding='UTF-8'?>
<model name="NFAT_Cytokine" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="uM">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="per_s">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="uM_per_s">
        <unit units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="environment">
        <variable name="t" public_interface="out" units="s"/>
    </component>
    <component name="NFAT_cytokines">
        <variable name="t" public_interface="in" units="s"/>
        <variable name="NFATN_n" public_interface="in" units="uM"/>
        <variable name="J_NFATNn" public_interface="in" units="uM_per_s"/>
        <variable name="J1" units="uM_per_s"/>
        <variable name="J2" units="uM_per_s"/>
        <variable name="J3" units="uM_per_s"/>
        <variable initial_value="0.1" name="k_f1" public_interface="out" units="per_s"/>
        <variable initial_value="23.0" name="k_f2" public_interface="out" units="per_s"/>
        <variable initial_value="0.03" name="k_f3" public_interface="out" units="per_s"/>
        <variable initial_value="0" name="IFN" public_interface="out" units="uM"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J1</ci>
                <apply>
                    <times/>
                    <ci>k_f1</ci>
                    <ci>NFATN_n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J2</ci>
                <apply>
                    <times/>
                    <ci>k_f2</ci>
                    <ci>NFATN_n</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J3</ci>
                <apply>
                    <times/>
                    <ci>k_f3</ci>
                    <ci>IFN</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>NFATN_n</ci>
                </apply>
                <apply>
                    <minus/>
                    <apply>
                        <minus/>
                        <ci>J_NFATNn</ci>
                        <ci>J1</ci>
                    </apply>
                    <ci>J2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>IFN</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                    <ci>J3</ci>
                </apply>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="NFATN_Cytokine" component_2="environment"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
</model>
