<?xml version='1.0' encoding='UTF-8'?>
<model name="FCepsilonRI" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="uM">
        <unit prefix="micro" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="per_s">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="uM_per_s">
        <unit units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="per_uM_per_s">
        <unit exponent="-1" units="uM"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="environment">
        <variable name="t" public_interface="out" units="s"/>
    </component>
    <component name="FCepsilonRI">
        <variable name="t" public_interface="in" units="s"/>
        <variable name="J1" units="uM_per_s"/>
        <variable name="J2" units="uM_per_s"/>
        <variable name="J3" units="uM_per_s"/>
        <variable name="J4" units="uM_per_s"/>
        <variable name="J5" units="uM_per_s"/>
        <variable name="J6" units="uM_per_s"/>
        <variable name="J7" units="uM_per_s"/>
        <variable initial_value="0" name="Lyn" units="uM"/>
        <variable initial_value="1" name="FC" units="uM"/>
        <variable initial_value="0" name="pFC" units="uM"/>
        <variable initial_value="0.005" name="Syk" units="uM"/>
        <variable initial_value="0" name="pSyk" units="uM"/>
        <variable initial_value="0" name="pGrb2" units="uM"/>
        <variable initial_value="0" name="pFCLyn" units="uM"/>
        <variable initial_value="0" name="pFCSyk" units="uM"/>
        <variable initial_value="0" name="pSykGrb2" units="uM"/>
        <variable initial_value="1.89585" name="Pi" units="uM"/>
        <variable initial_value="6.47" name="Grb2" units="uM"/>
        <variable initial_value="6.5" name="pLyn" units="uM"/>
        <variable initial_value="58.4" name="k_f1" units="per_uM_per_s"/>
        <variable initial_value="0.013548" name="k_r1" units="per_s"/>
        <variable initial_value="0.00817889" name="k_f2" units="per_s"/>
        <variable initial_value="1.0887" name="k_f3" units="per_uM_per_s"/>
        <variable initial_value="10.5797" name="k_f4" units="per_uM_per_s"/>
        <variable initial_value="0.0806961" name="k_r4" units="per_s"/>
        <variable initial_value="63.6727" name="k_f5" units="per_s"/>
        <variable initial_value="0.414288" name="k_f6" units="per_uM_per_s"/>
        <variable initial_value="0.731255" name="k_r6" units="per_s"/>
        <variable initial_value="11.4185" name="k_f7" units="per_s"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J1</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f1</ci>
                        <ci>FC</ci>
                        <ci>pLyn</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r1</ci>
                        <ci>pFCLyn</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J2</ci>
                <apply>
                    <times/>
                    <ci>k_f2</ci>
                    <ci>pFCLyn</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J3</ci>
                <apply>
                    <times/>
                    <ci>k_f3</ci>
                    <ci>Pi</ci>
                    <ci>Lyn</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J4</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f4</ci>
                        <ci>pFC</ci>
                        <ci>Syk</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r4</ci>
                        <ci>pFCSyk</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J5</ci>
                <apply>
                    <times/>
                    <ci>k_f5</ci>
                    <ci>pFCSyk</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J6</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>k_f6</ci>
                        <ci>pSyk</ci>
                        <ci>Grb2</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>k_r6</ci>
                        <ci>pSykGrb2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <ci>J7</ci>
                <apply>
                    <times/>
                    <ci>k_f7</ci>
                    <ci>pSykGrb2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>FC</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J1</ci>
                    </apply>
                    <ci>J5</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pFC</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J2</ci>
                    <ci>J4</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Syk</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J4</ci>
                    </apply>
                    <ci>J7</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pSyk</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J5</ci>
                    <ci>J6</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Lyn</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J2</ci>
                    <ci>J3</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pLyn</ci>
                </apply>
                <apply>
                    <plus/>
                    <apply>
                        <minus/>
                        <ci>J1</ci>
                    </apply>
                    <ci>J3</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pFCLyn</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                    <ci>J2</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pFCSyk</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J4</ci>
                    <ci>J5</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pSykGrb2</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J6</ci>
                    <ci>J7</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>Grb2</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J6</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>pGrb2</ci>
                </apply>
                <ci>J7</ci>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="environment" component_2="FCepsilonRI"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
</model>
